PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = 1.0000, 1.0000, 1.0000
  expName = ForagingNew
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruct2
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    TextComponent text_norm_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        As a space explorer, you’ll visit different planets to dig for space treasure, these pink gems.
        The more space treasure you mine, the more bonus payment you’ll win!
        [Press the space bar to continue]
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_2.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_2')
        thisExp.nextEntry()


        study.append({
            "ID": "",
            "TrialType":"Instruction_2",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_2
      color = 1,1,1
      image = ../images/task_images/pink_gem.jpg
      pos = (0, -0.2)
      size = (0.29, 0.3)
      startVal [time (s)] = 0.0
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  Routine Instruct1
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    TextComponent text_norm
      color = black
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Howdy! In this experiment, you’ll be an explorer traveling through space to collect space treasure.
        Your mission is to collect as much treasure as possible.
        Press the space bar to begin reading the instructions!
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image
      image = ../images/task_images/opening_img-01.jpg
      pos = (0, -0.3)
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        import csv
        from psychopy import core
        study = []  # this will hold all your trial data
        participant_id = expInfo['participant']  # this uses PsychoPy's built-in ID field
        experiment_clock = core.Clock()
        t_loop = 0
        endStudy = False
        total_gems = 0
        thank_you_text = ""
        def save_data(participant_id, trials):
            filename = f"data/participant_{participant_id}.csv"

            if not trials:
                print("No trial data to save.")
                return

            headers = trials[0].keys()

            with open(filename, "w", newline="") as f:
                writer = csv.DictWriter(f, fieldnames=headers)
                writer.writeheader()
                for trial in trials:
                    writer.writerow(trial)

            print(f"Data saved to {filename}")

        text_norm.alignHoriz= 'center'
        import numpy as np
        mainPhase = False
        numBlocks = 0
        # Generate from Beta distribution
        def rbeta(alpha, beta):
            return np.random.beta(alpha, beta)

        # Get decay rate based on galaxy type
        def get_decay_rate(galaxy):
            galaxy_distributions = {
                0: (13, 51),  # Rich
                1: (50, 50),  # Neutral
                2: (50, 12)   # Poor
            }
            if galaxy in galaxy_distributions:
                alpha, beta = galaxy_distributions[galaxy]
                return rbeta(alpha, beta)
            else:
                raise ValueError("Galaxy index out of range. Must be 0, 1, or 2.")

        # Track current galaxy
        galaxy = None

        # Choose the next galaxy
        def get_galaxy(first=False):
            global galaxy
            if first:
                galaxy = np.random.randint(0, 3)
            else:
                percentNum = np.random.randint(1, 11)
                if percentNum > 8:
                    newGalaxy = galaxy
                    while newGalaxy == galaxy:
                        newGalaxy = np.random.randint(0, 3)
                    galaxy = newGalaxy
        study = []
        experiment_clock = core.Clock()
        from psychopy import core
        import numpy as np
        image_prefix = '../images/task_images/'
        alien_index = 0
        planets = []
        planet_prefix = np.random.choice(np.arange(1,121),120,replace=False) # Randomize order of aliens, but made so they do not repeat
        for planet in planet_prefix:
            planets.append(image_prefix + f"aliens/alien_planet-{planet}.jpg")

        study.append({
            "ID": expInfo['participant'],
            "TrialType":"InitializeStudy",
            "BlockNum": "",
            "AlienOrder": planet_prefix,
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": "",
            "Bonus": ""
        })
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_1')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_1",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
  Routine Instruct3
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    TextComponent text_norm_3
      color = black
      letterHeight = 0.07
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        When you’ve arrived at a new planet, you will dig once.
        Then, you get to decide if you want to stay on the planet and dig again or travel to a new planet and dig there.
        To stay and dig, press the letter ‘A’ on the keyboard. Try pressing it now!
    KeyboardComponent key_instruct_3
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_3.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_3')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_3",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_3
      color = 1,1,1
      image = ../images/task_images/land.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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  Routine digLoop
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    ImageComponent image_4
      image [set every repeat] = $dig_image
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.666667
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  Routine gemReward
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    ImageComponent image_5
      image = ../images/task_images/gems/100.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine Instruct4
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    TextComponent text_norm_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        The longer you mine a planet the fewer gems you’ll get with each dig.
        When gems are running low, you may want to travel to a new planet that hasn’t been overmined.
        Planets are very far apart in this galaxy, so it will take some time to travel between them.
        There are lots and lots of planets for you to visit, so you won’t be able to return to any planets you’ve already visited.
        To leave this planet and travel to a new one, press the letter ‘L’ on the keyboard. Try pressing it now!
    KeyboardComponent key_instruct_4
      allowedKeys = 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_4')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_4",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_6
      image = ../images/task_images/rocket-01.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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  Routine travelLoop
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    ImageComponent image_7
      image [set every repeat] = $rocket_image
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        t_loop +=1
      End Routine:
        if mainPhase:

            if block_timer.getTime() >= block_duration:
                timeLoop.finished = True
                if numBlocks == 5:
                    endStudy = True
                    thank_you_text = f"Thank you for participating! Your bonus money is ${int(np.round(total_gems * 0.0002))} Please notify your experimenter you have completed the study."
        if t_loop == 1:
            study.append({
                    "ID": "",
                    "TrialType":f"Travel_Planet",
                    "BlockNum": "",
                    "AlienOrder": "",
                    "QuizResp": "",
                    "QuizFailedNum": "",
                    "TimeElapsed": experiment_clock.getTime(),
                    "RT": "",
                    "PRT": "",
                    "Galaxy": "",
                    "DecayRate": "",
                    "AlienIndex": "",
                    "GemValue": "",
                    "TimeInBlock": ""
                })
            thisExp.addData('trial_type','travel_trial')
            thisExp.nextEntry()
  Routine Instruct5
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    TextComponent text_norm_5
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 1
      units = norm
      wrapWidth = 1.8
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      text:
        When you arrive at a new planet, an alien from that planet will greet you!
        [Press the space bar to continue]
    KeyboardComponent key_instruct_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
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    CodeComponent text_align_5
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_5.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_5')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_5",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_8
      image = ../images/task_images/aliens/alien_planet-125.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 1
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  Routine Instruct6
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    TextComponent text_norm_6
      color = black
      letterHeight = 0.05
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        If you’re not fast enough in making a choice, you’ll have to wait a few seconds before you can make another one.
        You can’t dig for more gems or travel to new planets. You just have to sit and wait.
        [Press the space bar to continue]
    KeyboardComponent key_instruct_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_6
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_6.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_6')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_6",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_9
      image = ../images/task_images/time_out.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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  Routine Instruct7
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    TextComponent text_norm_7
      color = black
      letterHeight = 0.05
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        After digging and traveling for a while, you’ll be able to take a break at home base.
        You can spend at most 1 minute at home base — there are still a lot of gems left to collect!
        You will spend 30 minutes mining gems and traveling to new planets no matter what.
        You will visit home base every 6 minutes, so, you will visit home base four times during the game.
        [Press the space bar to continue]
    KeyboardComponent key_instruct_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_7
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_7.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_7')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":"Instruction_7",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
    ImageComponent image_10
      image = ../images/task_images/home_base.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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  Routine practiceQuiz
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    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.07
      Items = practice_quiz_form.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.1, 0.9)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        quizTries = 0
      Begin Routine:
        # Reset all responses in the Form manually
        for item in form.items:
            item['response'] = None
        form._currentIndex = 0  # Reset scroll position

        print("Form responses at start:", [item['response'] for item in form.items])
      Each Frame:
        answers = form.getData()
        responses = [ans['response'] for ans in answers if ans['response'] not in [None, ""]]
        correct_answers = ["The number of gems you collect", "Is fixed", "False"]
        QuizCorrect = True
        for i in range(len(responses)):
            if responses[i] != correct_answers[i]:
                QuizCorrect = False
                break
        if quizTries == 0:
            if len(responses) == 3 and all(response is not None for response in responses):
                continueRoutine = False
        else:
            if responses == correct_answers:
                break
      End Routine:
        quizTries +=1
        thisExp.addData('trial_type','quiz')
        thisExp.addData('QuizResp',responses)
        thisExp.addData('QuizFailedNum',quizTries-1)
        thisExp.nextEntry()

        study.append({
                "ID": "",
                "TrialType":f"practice_quiz",
                "BlockNum": "",
                "AlienOrder": "",
                "QuizResp": responses,
                "QuizFailedNum": quizTries - 1,
                "TimeElapsed": experiment_clock.getTime(),
                "RT": "",
                "PRT": "",
                "Galaxy":"",
                "DecayRate": "",
                "AlienIndex": "",
                "GemValue": "",
                "TimeInBlock": ""
            })
  Routine QuizFeedback
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    TextComponent feedbackText
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Correct! Press SPACE to continue." if QuizCorrect else "Incorrect. Press SPACE to reread the instructions and try again."
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if QuizCorrect:
            ifQuizWrong.finished = True
  Routine manualpracticequiz
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        questions = [
            "What affects the amount of bonus money you will earn?",
            "The length of this experiment",
            "You get to stay at home base as long as you like."
        ]
        options = [
            ["The number of planets you visit", "How long you stay at home base", "The number of gems you collect"],
            ["Depends on how many planets you've visited", "Is fixed", "Depends on how many gems you've collected"],
            ["True", "False"]
        ]

        form_items = []
        button_boxes = []

        # Build visual form manually
        for i, q in enumerate(questions):
            y_pos = 0.3 - (i * 0.3)
            q_text = visual.TextStim(win, text=q, pos=(0, y_pos), height=0.05, color='black')
            form_items.append(q_text)

            box_row = []
            for j, opt in enumerate(options[i]):
                x_pos = -0.4 + j * 0.4
                opt_text = visual.TextStim(win, text=opt, pos=(x_pos, y_pos - 0.1), height=0.04, color='black')
                box_row.append(opt_text)
            button_boxes.append(box_row)

        response_indices = [None] * len(questions)
      Each Frame:
        # Draw everything
        for item in form_items:
            item.draw()

        for row in button_boxes:
            for opt in row:
                opt.draw()

        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()

        # Simple input system: use number keys 1–3 to select options for each question
        for i in range(len(questions)):
            if response_indices[i] is None:
                if '1' in keys:
                    response_indices[i] = 0
                elif '2' in keys:
                    response_indices[i] = 1
                elif '3' in keys and len(options[i]) > 2:
                    response_indices[i] = 2

        # If all are answered, allow continue with RETURN
        if all(resp is not None for resp in response_indices) and 'return' in keys:
            continueRoutine = False
      Each JS Frame:
        /* Syntax Error: Fix Python code */
      End Routine:
        thisExp.addData("QuizResponses", response_indices)
        # You can check correctness here too if needed
        responses = [item['response'] for item in form.items]
        correct_answers = ["The number of gems you collect", "Is fixed", "False"]  # or pull from form data if dynamic

        QuizCorrect = True
        for i in range(len(responses)):
            if responses[i] != correct_answers[i]:
                QuizCorrect = False
                break
  Routine Instruct8
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    TextComponent text_norm_8
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Now, you'll play a practice game, so you can practice mining space treasure and traveling to new planets.

        In the practice game, you'll be digging up barrels of gems. But, in the real game, you'll be digging up the gems themselves.

        Press the space bar to begin practice!
    KeyboardComponent key_instruct_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_8
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_8.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData('trial_type','instruct_8')
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":f"Instruction_8",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
  Routine practiceGem
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    ImageComponent practice_gem
      image = ../images/task_images/barrel_text.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('trial_type','practice_gem')
        thisExp.nextEntry()
        gem = 'practiceGem'
  Routine practiceAlien
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    ImageComponent pracAlienIMG
      image = ../images/task_images/aliens/alien_planet-124.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine digOptions
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    TextComponent text_norm_9
      color = black
      letterHeight = 0.07
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Dig here or travel to a new planet?
      units = norm
      wrapWidth = 1.8
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    ImageComponent image_11
      image = ../images/task_images/land.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent digChoices
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent code_4
      Code Type = Both
      Begin Routine:
        practiceRTclock = core.Clock()
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6("l", digChoices.keys)) {
            practiceDigLoop.finished = true;
        }
      End Routine:
        if digChoices.keys is not None and 'l' in digChoices.keys:
            practiceDigLoop.finished = True

        if digChoices.keys is None:
            too_slow_check = True
        else:
            too_slow_check = False

        thisExp.addData('trial_type','dig_choice')
        thisExp.addData('key_press',digChoices.keys)
        thisExp.nextEntry()
        if digChoices.keys:
            pracRT = practiceRTclock.getTime()
        else:
            pracRT = 'NA'
        study.append({
            "ID": "",
            "TrialType":f"Practice_Trial",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": pracRT,
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
  Routine choiceScreen
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    TextComponent text_norm_12
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Now that you know how to dig for space treasure and travel to new planets, you can start exploring the universe!

        Do you want to play the practice game again or get started with the real game?
    ButtonComponent buttonPractice
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Practice game again
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    ButtonComponent buttonReal
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.3, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Move on to the real game
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if buttonPractice.isClicked:
            choice = 'practice'

        elif buttonReal.isClicked:
            choice = 'real'
            practiceLoop.finished = True


        thisExp.addData('trial_type','practice_move_on')
        thisExp.nextEntry()
        study.append({
            "ID": "",
            "TrialType":f"Instruction_Button",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": "",
            "TimeInBlock": ""
        })
  Routine Instruct9
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    TextComponent text_norm_10
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Task starting!
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_9
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_10.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        first_trial = True
        galaxy = None
        mainPhase = True
        if first_trial:
            galaxy = np.random.randint(0, 3)
        else:
            percentNum = np.random.randint(1, 11)
            if percentNum > 8:
                newGalaxy = galaxy
                while newGalaxy == galaxy:
                    newGalaxy = np.random.randint(0, 3)
                galaxy = newGalaxy
        print(galaxy)
        decay = get_decay_rate(galaxy=galaxy)
        gem = round(np.max([np.min([np.random.normal(100,5),135]),0]))
        gem_path = f"../images/task_images/gems/{gem}.jpg"

        from psychopy import core
        block_timer = core.Clock()
        block_duration = 0.5 * 60  # 6 minutes

        numBlocks +=1

        thisExp.addData('trial_type','beginBlock')
        thisExp.addData('blockNum',numBlocks)
        thisExp.addData('Galaxy',galaxy)
        thisExp.addData('alienIndex',alien_index)
        thisExp.addData('planet',planets[alien_index])
        thisExp.nextEntry()

        study.append({
            "ID": "",
            "TrialType":f"start_loop",
            "BlockNum": numBlocks,
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": "",
            "PRT": "",
            "Galaxy": galaxy,
            "DecayRate": decay,
            "AlienIndex": alien_index,
            "GemValue": gem,
            "TimeInBlock": ""
        })
  Routine tooSlow
    RoutineSettingsComponent tooSlow
      skipIf = too_slow_check == False
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    ImageComponent too_slow_img
      image = ../images/task_images/time_out.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('trial_type','too_slow')
        thisExp.nextEntry()
        if too_slow_check == True:
            study.append({
                "ID": "",
                "TrialType":f"Too_slow",
                "BlockNum": "",
                "AlienOrder": "",
                "QuizResp": "",
                "QuizFailedNum": "",
                "TimeElapsed": experiment_clock.getTime(),
                "RT": "NA",
                "PRT": "",
                "Galaxy": "",
                "DecayRate": "",
                "AlienIndex": "",
                "GemValue": "",
                "TimeInBlock": ""
            })
  Routine alienVisit
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    ImageComponent image_12
      image [set every repeat] = $planets[alien_index]
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        prt_check = True
        if first_trial:
            pass
        else:
            percentNum = np.random.randint(1, 11)
            if percentNum > 8:
                newGalaxy = galaxy
                while newGalaxy == galaxy:
                    newGalaxy = np.random.randint(0, 3)
                galaxy = newGalaxy
            decay = get_decay_rate(galaxy=galaxy)
            gem = round(np.max([np.min([np.random.normal(100,5),135]),0]))
            study.append({
                "ID": "",
                "TrialType":f"alien_visit",
                "BlockNum": "",
                "AlienOrder": "",
                "QuizResp": "",
                "QuizFailedNum": "",
                "TimeElapsed": experiment_clock.getTime(),
                "RT": "",
                "PRT": "",
                "Galaxy": galaxy,
                "DecayRate": decay,
                "AlienIndex": alien_index,
                "GemValue": gem,
                "TimeInBlock": ""
            })
        alien_index += 1
        print(galaxy)
        gem_path = f"../images/task_images/gems/{gem}.jpg"
        first_trial = False
        thisExp.addData('gemValue',gem)
        thisExp.addData('decay_rate',decay)
        thisExp.nextEntry()
  Routine digTrial
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    ImageComponent gemIMG
      image [set every repeat] = $gem_path
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_7
      Code Type = Both
      End JS Routine:
        gem = util.round((decay * gem));
        gem_path = (image_prefix + `gems/${gem}.jpg`);
  Routine stay_leave
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    TextComponent text_norm_11
      color = black
      letterHeight = 0.07
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Dig here or travel to a new planet?
      units = norm
      wrapWidth = 1.8
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    ImageComponent image_13
      image = ../images/task_images/land.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent digChoices_2
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_8
      Code Type = Both
      Begin Experiment:
        dig_index = 0
      Begin Routine:
        RTclock =core.Clock()
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6("l", digChoices.keys)) {
            practiceDigLoop.finished = true;
        }
      End Routine:
        total_gems +=1
        gem = round(decay*gem) # Adds decay to next gem value for following trial
        image_prefix = '../images/task_images/'
        gem_path = image_prefix + f"gems/{gem}.jpg"
        if prt_check:
            prt_clock = core.Clock()
        t_loop = 0
        prt_check = False
        thisExp.addData('trial_type', 'dig_choice')
        if digChoices_2.keys is not None and 'l' in digChoices_2.keys:
            digloop_main.finished = True
            thisExp.addData('PRT', prt_clock.getTime())
            thisExp.addData('key_press','l')
            thisExp.nextEntry()
        if digChoices_2.keys is not None and 'a' in digChoices_2.keys:
            thisExp.addData('key_press','a')
            thisExp.nextEntry()

        if digChoices_2.keys is None:
            too_slow_check = True
            thisExp.nextEntry()
        else:
            too_slow_check = False
        if digChoices_2.keys:
            RT = RTclock.getTime()
        else:
            RT = 'NA'
        dig_index += 1
        study.append({
            "ID": "",
            "TrialType":f"Dig_Trial_{dig_index}",
            "BlockNum": "",
            "AlienOrder": "",
            "QuizResp": "",
            "QuizFailedNum": "",
            "TimeElapsed": experiment_clock.getTime(),
            "RT": RT,
            "PRT": "",
            "Galaxy": "",
            "DecayRate": "",
            "AlienIndex": "",
            "GemValue": gem, # Initial gem value set in block_loop
            "TimeInBlock": ""
        })
  Routine homeBase
    RoutineSettingsComponent homeBase
      skipIf = endStudy
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    TextComponent text_norm_13
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = norm
      wrapWidth = 1.8
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      text:
        You have been traveling for a while. Time to take a rest at home base!
        When you are ready to move one, press the space bar. You have up to a minute of rest.
    ImageComponent image_14
      image = ../images/task_images/home_base.jpg
      pos = (0, -0.1)
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = first key
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        study.append({
                "ID": "",
                "TrialType":f"home_base",
                "BlockNum": "",
                "AlienOrder": "",
                "QuizResp": "",
                "QuizFailedNum": "",
                "TimeElapsed": experiment_clock.getTime(),
                "RT": "",
                "PRT": "",
                "Galaxy":"",
                "DecayRate": "",
                "AlienIndex": "",
                "GemValue": "",
                "TimeInBlock": block_timer.getTime() # Block time is fixed from block_loop
            })
  Routine thank_you
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    TextComponent text_norm_14
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $thank_you_text
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_10
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_14.alignHoriz= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      End Routine:
        thisExp.addData("trial_type","thank_you")
        thisExp.nextEntry()
        study.append({
                "ID": "",
                "TrialType":f"EndStudy",
                "BlockNum": "",
                "AlienOrder": "",
                "QuizResp": "",
                "QuizFailedNum": "",
                "TimeElapsed": experiment_clock.getTime(),
                "RT": "",
                "PRT": "",
                "Galaxy":"",
                "DecayRate": "",
                "AlienIndex": "",
                "GemValue": "",
                "TimeInBlock": "",
                "Bonus": int(np.round(total_gems * 0.0002))
            })
        save_data(expInfo['participant'], study)
  Routine travel_init
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    ImageComponent image_15
      image = ../images/task_images/rocket-09.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator ifQuizWrong loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine Instruct1
    Routine Instruct2
    Routine Instruct3
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = psychopy-vars.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'dig_image': '../images/task_images/dig.jpg', 'rocket_image': '../images/task_images/rocket-01.jpg'},
        {'dig_image': '../images/task_images/land.jpg', 'rocket_image': '../images/task_images/rocket-02.jpg'},
        {'dig_image': '../images/task_images/dig.jpg', 'rocket_image': '../images/task_images/rocket-03.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-04.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-05.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-06.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-07.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-08.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-09.jpg'}]
      Routine digLoop
    LoopTerminator trials
    Routine gemReward
    Routine Instruct4
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = psychopy-vars.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'dig_image': '../images/task_images/dig.jpg', 'rocket_image': '../images/task_images/rocket-01.jpg'},
        {'dig_image': '../images/task_images/land.jpg', 'rocket_image': '../images/task_images/rocket-02.jpg'},
        {'dig_image': '../images/task_images/dig.jpg', 'rocket_image': '../images/task_images/rocket-03.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-04.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-05.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-06.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-07.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-08.jpg'},
        {'dig_image': None, 'rocket_image': '../images/task_images/rocket-09.jpg'}]
      Routine travelLoop
    LoopTerminator trials_2
    Routine Instruct5
    Routine Instruct6
    Routine Instruct7
    Routine practiceQuiz
    Routine QuizFeedback
  LoopTerminator ifQuizWrong
  Routine Instruct8
  LoopInitiator practiceLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine practiceAlien
    LoopInitiator practiceDigLoop loopType="TrialHandler"
      loopType = random
      nReps = 10
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      LoopInitiator practiceDig loopType="TrialHandler"
        Selected rows = 0:3
        conditionsFile = psychopy-vars.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
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        Routine digLoop
      LoopTerminator practiceDig
      Routine practiceGem
      Routine digOptions
      Routine tooSlow
    LoopTerminator practiceDigLoop
    LoopInitiator practiceTravelLoop loopType="TrialHandler"
      conditionsFile = psychopy-vars.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine travelLoop
    LoopTerminator practiceTravelLoop
    Routine travel_init
    Routine choiceScreen
  LoopTerminator practiceLoop
  LoopInitiator blockLoopFull loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Instruct9
    LoopInitiator timeLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 300
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      Routine alienVisit
      LoopInitiator digloop_main loopType="TrialHandler"
        loopType = sequential
        nReps = 100
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        LoopInitiator digs loopType="TrialHandler"
          Selected rows = 0:3
          conditionsFile = psychopy-vars.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine digLoop
        LoopTerminator digs
        Routine digTrial
        Routine stay_leave
        Routine tooSlow
      LoopTerminator digloop_main
      LoopInitiator travel_animation loopType="TrialHandler"
        conditionsFile = psychopy-vars.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
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        Routine travelLoop
      LoopTerminator travel_animation
      Routine travel_init
    LoopTerminator timeLoop
    Routine homeBase
  LoopTerminator blockLoopFull
  Routine thank_you
